PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = dot_probe_draft
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $Picture1
      pos [set every repeat] = [-0.4, 0]
      size = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_2
      image [set every repeat] = $Picture2
      pos = [0.4, 0]
      size = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      pos [set every repeat] = $Locations
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.525
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.025
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    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.525
      timeRelativeTo = routine
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  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press any key to start dot probe task.
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delay
    TextComponent delay_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine end
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press any key to exit. 
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Picture1', 'smile.jpg'), ('Picture2', 'frown.jpg'), ('Locations', [0.35, 0])]),
      OrderedDict([('Picture1', 'frown.jpg'), ('Picture2', 'smile.jpg'), ('Locations', [-0.35, 0])]),
      OrderedDict([('Picture1', 'frown.jpg'), ('Picture2', 'smile.jpg'), ('Locations', [-0.35, 0])]),
      OrderedDict([('Picture1', 'smile.jpg'), ('Picture2', 'frown.jpg'), ('Locations', [-0.35, 0])]),
      OrderedDict([('Picture1', 'frown.jpg'), ('Picture2', 'smile.jpg'), ('Locations', [0.35, 0])]),
      OrderedDict([('Picture1', 'frown.jpg'), ('Picture2', 'smile.jpg'), ('Locations', [-0.35, 0])]),
      OrderedDict([('Picture1', 'smile.jpg'), ('Picture2', 'frown.jpg'), ('Locations', [0.35, 0])])]
    Routine fixation
    Routine trial
    Routine delay
  LoopTerminator trials
  Routine end
